PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mw_exp
  eyetracker = eyetracker.hw.sr_research.eyelink.EyeTracker
  keyboardBackend = PsychToolbox
  runMode = 0
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine trial
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Flow
  Routine trial
